PsychoPy2experiment version="2026.1.0"
Settings
  expName = ldt
  runMode = 0
  Experiment info = {"participant":"1","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    TextComponent fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      letterHeight = 0.05
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    TextComponent prime_text
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.15
      text [set every repeat] = $prime
      letterHeight = 0.05
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    TextComponent target_text
      startVal [time (s)] = 0.5 + soa/1000
      stopVal [duration (s)] = 2
      text [set every repeat] = $target.upper()
      letterHeight = 0.05
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    KeyboardComponent decision
      startVal [time (s)] = 0.5 + soa/1000
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = ["f","j"]
      store = first key
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  Routine instructions
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    TextComponent instructionText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Look at the UPPERCASE target.

        Press F if it is a word.
        Press J if it is a nonword.

        Press SPACE to begin.
    KeyboardComponent beginKey
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = ["space"]
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Flow
  Routine instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = trial_lists/trials_p01.csv
    nReps = 1
    Selected rows = 0:8
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator practice_loop
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = trial_lists/trials_p01.csv
    nReps = 1
    Selected rows = 8:104
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator main_loop
